PsychoPy2experiment version="2021.2.3"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['Pseudonym'], expName, expInfo['date'])
  Experiment info = {'Pseudonym': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2021.2.3
  Window size (pixels) = [1536, 864]
  expName = rdk-discrimination
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Routines
  Routine Instruction
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Willkommen zum Experiment
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Dots
    CodeComponent dots_get_direction
      Code Type = Auto->JS
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      Begin Routine:
        if direction == "right":
            dots_direction = 90
        elif direction == "left":
            dots_direction = 270
    PolygonComponent dots_background
      fillColor = black
      lineColor = black
      shape = circle
      size = (0.75, 0.75)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    DotsComponent dots
      coherence = 0.08
      dir [set every repeat] = dots_direction
      dotLife = 3
      dotSize = 3
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 0.75
      nDots = 200
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.0125
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    KeyboardComponent dots_main_keyboard_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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  Routine Feedback
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        # If the participant did not respond at all, set the response text to 'miss'.
        # You can figure that out by checking whether the given response 'None'.
        # 'None' in Python means a values is not defined, so when
        # dots_main_keyboard_resp.keys is 'None' we know the participant did not respond.
        if dots_main_keyboard_resp.keys is None:
            response_text = "Verpasst"

        # If the response time (rt) was shorter than 100ms, set the response text to
        # 'too fast' (like Mulder et al., 2012 did).
        # You can get the response time from the Keyboard component that was used to
        # capture the response (name_of_the_keyboard_component.rt).
        elif dots_main_keyboard_resp.rt <= 0.1:
            response_text = "Zu schnell"

        else:
            response_text = "other feedback"

        print(dots_main_keyboard_resp.keys)
    TextComponent main_feedback_text
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $response_text
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  Routine Cue
    CodeComponent code
      Code Type = Py
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      Begin Routine:
        if cue == "left":
            cue_string = "←"
        elif cue == "right":
            cue_string = "→"
        elif cue == "none":
            cue_string = "○"
    TextComponent cue_text
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $cue_string
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  Routine Fixation_pre_cue
    CodeComponent code_random_fix_dur_pre
      Code Type = Py
      Begin Routine:
        # Before the fixation cross (the one before the cue) is displayed, randomly
        # choose a duration for it. Since we are using seconds as time unit, these
        # numbers correspond to 100ms, 350ms, 800ms and 1200ms.
        fixation_duration_pre_cue = randchoice([0.1, 0.35, 0.8, 1.2])
    TextComponent fixation_cross_pre
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixation_duration_pre_cue
      text = +
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  Routine Fixation_post_cue
    CodeComponent code_random_fix_dur_post
      Code Type = Py
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      Begin Routine:
        # Before the fixation cross (the one after the cue) is displayed, randomly
        # choose a duration for it. Since we are using seconds as time unit, these
        # numbers correspond to 3400ms, 4000ms, 4500ms and 5000ms.
        fixation_duration_post_cue = randchoice([3.4, 4, 4.5, 5])
    TextComponent text_2
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixation_duration_post_cue
      text = +
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Flow
  Routine Instruction
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('cue', 'left'), ('direction', 'left')]),
      OrderedDict([('cue', 'left'), ('direction', 'left')]),
      OrderedDict([('cue', 'left'), ('direction', 'left')]),
      OrderedDict([('cue', 'left'), ('direction', 'left')]),
      OrderedDict([('cue', 'left'), ('direction', 'left')]),
      OrderedDict([('cue', 'left'), ('direction', 'left')]),
      OrderedDict([('cue', 'left'), ('direction', 'left')]),
      OrderedDict([('cue', 'left'), ('direction', 'left')]),
      OrderedDict([('cue', 'left'), ('direction', 'left')]),
      OrderedDict([('cue', 'left'), ('direction', 'left')]),
      OrderedDict([('cue', 'left'), ('direction', 'left')]),
      OrderedDict([('cue', 'left'), ('direction', 'left')]),
      OrderedDict([('cue', 'left'), ('direction', 'left')]),
      OrderedDict([('cue', 'left'), ('direction', 'left')]),
      OrderedDict([('cue', 'left'), ('direction', 'left')]),
      OrderedDict([('cue', 'left'), ('direction', 'left')]),
      OrderedDict([('cue', 'right'), ('direction', 'right')]),
      OrderedDict([('cue', 'right'), ('direction', 'right')]),
      OrderedDict([('cue', 'right'), ('direction', 'right')]),
      OrderedDict([('cue', 'right'), ('direction', 'right')]),
      OrderedDict([('cue', 'right'), ('direction', 'right')]),
      OrderedDict([('cue', 'right'), ('direction', 'right')]),
      OrderedDict([('cue', 'right'), ('direction', 'right')]),
      OrderedDict([('cue', 'right'), ('direction', 'right')]),
      OrderedDict([('cue', 'right'), ('direction', 'right')]),
      OrderedDict([('cue', 'right'), ('direction', 'right')]),
      OrderedDict([('cue', 'right'), ('direction', 'right')])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
    Routine Fixation_pre_cue
    Routine Cue
    Routine Fixation_post_cue
    Routine Dots
    Routine Feedback
  LoopTerminator blocks
